PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = individual assignment animal
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent right_rectangle
      fillColor = white
      pos = (0.4, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent left_rectangle
      fillColor = white
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent left_image
      image [set every repeat] = $l_image
      pos = (-0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent right_image
      image [set every repeat] = $r_image
      pos = (0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent trail_sound
      sound [set every repeat] = $target_sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.59
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    MouseComponent trial_mouse
      clickable = left_image, right_image, left_rectangle, right_rectangle
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine start
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    PolygonComponent start_Lrectangle
      fillColor = white
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent start_Rrecntangle
      fillColor = white
      pos = (0.4, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent start_L_image
      image [set every repeat] = $l_image
      pos = (-0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent start_R_image
      image [set every repeat] = $r_image
      pos = (0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent star
      fillColor = yellow
      lineColor = yellow
      shape = star7
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent star_mouse
      clickable = star
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine welcome
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the yellow star and do as said. Please press spacebar when you are ready 
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = indvidual assignment file of trails.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'l_image': 'C:\\Users\\HP\\Downloads\\individual assignment\\dog.png', 'r_image': 'C:\\Users\\HP\\Downloads\\individual assignment\\pig.png', 'target_sound': 'C:\\Users\\HP\\Downloads\\individual assignment\\dog.wav', 'correct': 'C:\\Users\\HP\\Downloads\\individual assignment\\dog.png'},
      {'l_image': 'C:\\Users\\HP\\Downloads\\individual assignment\\parrot.png', 'r_image': 'C:\\Users\\HP\\Downloads\\individual assignment\\piegon.png', 'target_sound': 'C:\\Users\\HP\\Downloads\\individual assignment\\1732375047288jmx5n7yf-voicemaker.in-speech.wav', 'correct': '"C:\\Users\\HP\\Downloads\\individual assignment\\parrot.png"'},
      {'l_image': 'C:\\Users\\HP\\Downloads\\individual assignment\\pig.png', 'r_image': 'C:\\Users\\HP\\Downloads\\individual assignment\\dog.png', 'target_sound': 'C:\\Users\\HP\\Downloads\\individual assignment\\pig.wav', 'correct': 'C:\\Users\\HP\\Downloads\\individual assignment\\pig.png'},
      {'l_image': 'C:\\Users\\HP\\Downloads\\individual assignment\\maina.png', 'r_image': 'C:\\Users\\HP\\Downloads\\individual assignment\\sparrow_.png', 'target_sound': 'C:\\Users\\HP\\Downloads\\individual assignment\\1732467382297lq2i0ywk-voicemaker.in-speech.wav', 'correct': 'C:\\Users\\HP\\Downloads\\individual assignment\\sparrow_.png'}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
    Routine start
    Routine trial
  LoopTerminator trials
